graphs:
  - id: hello_sinus
    nodes:
      - id: noisy_sinus
        module: timeflux_audio.nodes.signal
        class: Additive
        params: 
          frequencies: [1, 50] # Frequency of signal (1Hz) and line noise (50Hz)
          resolution: 128 # Sampling rate of the signal (128Hz)
          amplitudes:  [1, 0.2] # Amplitudes of signal (1) and line noise (0.2)
          name: noisy

      # part 1
      - id: lowpass
        module: timeflux_dsp.nodes.filters
        class: IIRFilter
        params:
          frequencies: [2]
          order: 3
          filter_type: lowpass

      # part 2
      - id: ui
        module: timeflux_ui.nodes.ui
        class: UI

      # part 4
      # TODO: Add a route in the UI to your own app

      # for debug purpose
      # -----------------
      - id: display
        module: timeflux.nodes.debug
        class: Display
    edges:
      # part 1
      - source: noisy_sinus
        target: lowpass

      # part 2
      - source: noisy_sinus
        target: ui:noisy
      - source: lowpass
        target: ui:lowpassed
    rate: 32