graphs:
  - id: bitalino
    nodes:
      - id: bitalino
        module: timeflux_bitalino.nodes.driver
        class: Bitalino
        params:
          port: /dev/tty.BITalino-02-44-DevB  # Pierre
          #        port: /dev/tty.BITalino-03-87-DevB  # Open Mind
          rate: 1000

      - id: pub_bitalino
        module: timeflux.nodes.zmq
        class: Pub
        params:
          topic: bitalino

      # for debug purpose
      # ------------------
      - id: display
        module: timeflux.nodes.debug
        class: Display
    edges:
      - source: bitalino
        target: pub_bitalino
    rate: 30
