graphs:
  - id: save
    nodes:
      - id: sub
        module: timeflux.nodes.zmq
        class: Sub
        params:
          topics: [bitalino, eeg, events]
      - id: save
        module: timeflux.nodes.hdf5
        class: Save
        params:
          min_itemsize: 1000
    edges:
      - source: sub:bitalino
        target: save:bitalino # will be saved in hdf( key '/bitalino'

      - source: sub:eeg_filtered
        target: save:eeg_filtered # will be saved in hdf( key '/eeg/filtered'

      - source: sub:eeg_powers
        target: save:eeg_powers  # will be saved in hdf( key '/eeg/raw'

      - source: sub:eeg_blinks
        target: save:eeg_blinks  # will be saved in hdf( key '/eeg/blinks'

      - source: sub:events
        target: save:events # will be saved in hdf( key '/events'
    rate: 1 # save stuff once per second