graphs:

  - nodes:
    - id: random
      module: timeflux.nodes.random
      class: Random
      params:
        columns: 5
        rows_min: 1
        rows_max: 10
        value_min: 0
        value_max: 5
        seed: 1
    - id: add
      module: timeflux_example.nodes.arithmetic
      class: Add
      params:
        value: 1
    - id: display_random
      module: timeflux.nodes.debug
      class: Display
    - id: display_add
      module: timeflux.nodes.debug
      class: Display
    edges:
    - source: random
      target: add
    - source: random
      target: display_random
    - source: add
      target: display_add